opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: 359 Synthesis
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  thermocyclerModuleV1: {slot: span7_8_10_11}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  359 Synthesis cycle: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: thermocyclerModuleV1}
  BB Library: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 3}
  Reagents: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 6}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 4}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 5}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 2}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - BB (AAA)
  - BB (AAC)
  - BB (AAG)
  - BB (AAT)
  - BB (ACA)
  - BB (ACC)
  - BB (ACG)
  - BB (ACT)
  - BB (AGA)
  - BB (AGC)
  - BB (AGG)
  - BB (AGT)
  - BB (ATA)
  - BB (ATC)
  - BB (ATG)
  - BB (ATT)
  - BB (CAA)
  - BB (CAC)
  - BB (CAG)
  - BB (CAT)
  - BB (CCA)
  - BB (CCC)
  - BB (CCG)
  - BB (CCT)
  - BB (CGA)
  - BB (CGC) 
  - BB  (CGG)
  - BB (CGT)
  - BB (CTA)
  - BB (CTC)
  - BB (CTG)
  - BB (CTT)
  - BB (GAA)
  - BB (GAC)
  - BB (GAG)
  - BB (GAT)
  - BB (GCA)
  - BB (GCC)
  - BB (GCG)
  - BB (GCT)
  - BB (GGA)
  - BB (GGC)
  - BB (GGG)
  - BB (GGT)
  - BB (GTA)
  - BB (GTC)
  - BB (GTG)
  - BB (GTT)
  - BB (TAA)
  - BB (TAC)
  - BB (TAG)
  - BB (TAT)
  - BB (TCA)
  - BB (TCC)
  - BB (TCG)
  - BB (TCT)
  - BB (TGA)
  - BB (TGC)
  - BB (TGG)
  - BB (TGT)
  - BB (TTA)
  - BB (TTC)
  - BB (TTG)
  - BB (TTT)
  - A-Site Restriction Enzyme: {description: 5' 4 bp overhang created}
  - X-Site Restriction Enzyme: {description: 3' Single base pair overhang created}
  - Y-Site Restriction Enzyme: {description: 3' Single base pair overhang created}
  - B-Site Restriction Enzyme: {description: 5' 4 bp overhang created}
  - 10X CutSmart Buffer
  - T4 DNA Ligase 
  - 10X T4 Ligation Buffer 
  - Supplement T4 DNA Ligase Buffer
  - DNA Phosphatase (CIP) 
  - Nuclease Free Water 
ingredLocations:
  BB Library:
    BB (AAA) {volume: 100}: A1
    BB (AAC) {volume: 100}: A2
    BB (AAG) {volume: 100}: A3
    BB (AAT) {volume: 100}: A4
    BB (ACA) {volume: 100}: A5
    BB (ACC) {volume: 100}: A6
    BB (ACG) {volume: 100}: A7
    BB (ACT) {volume: 100}: A8
    BB (AGA) {volume: 100}: B1
    BB (AGC) {volume: 100}: B2
    BB (AGG) {volume: 100}: B3
    BB (AGT) {volume: 100}: B4
    BB (ATA) {volume: 100}: B5
    BB (ATC) {volume: 100}: B6
    BB (ATG) {volume: 100}: B7
    BB (ATT) {volume: 100}: B8
    BB (CAA) {volume: 100}: C1
    BB (CAC) {volume: 100}: C2
    BB (CAG) {volume: 100}: C3
    BB (CAT) {volume: 100}: C4
    BB (CCA) {volume: 100}: C5
    BB (CCC) {volume: 100}: C6
    BB (CCG) {volume: 100}: C7
    BB (CCT) {volume: 100}: C8
    BB (CGA) {volume: 100}: D1
    BB (CGC)  {volume: 100}: D2
    BB  (CGG) {volume: 100}: D3
    BB (CGT) {volume: 100}: D4
    BB (CTA) {volume: 100}: D5
    BB (CTC) {volume: 100}: D6
    BB (CTG) {volume: 100}: D7
    BB (CTT) {volume: 100}: D8
    BB (GAA) {volume: 100}: E1
    BB (GAC) {volume: 100}: E2
    BB (GAG) {volume: 100}: E3
    BB (GAT) {volume: 100}: E4
    BB (GCA) {volume: 100}: E5
    BB (GCC) {volume: 100}: E6
    BB (GCG) {volume: 100}: E7
    BB (GCT) {volume: 100}: E8
    BB (GGA) {volume: 100}: F1
    BB (GGC) {volume: 100}: F2
    BB (GGG) {volume: 100}: F3
    BB (GGT) {volume: 100}: F4
    BB (GTA) {volume: 100}: F5
    BB (GTC) {volume: 100}: F6
    BB (GTG) {volume: 100}: F7
    BB (GTT) {volume: 100}: F8
    BB (TAA) {volume: 100}: G1
    BB (TAC) {volume: 100}: G2
    BB (TAG) {volume: 100}: G3
    BB (TAT) {volume: 100}: G4
    BB (TCA) {volume: 100}: G5
    BB (TCC) {volume: 100}: G6
    BB (TCG) {volume: 100}: G7
    BB (TCT) {volume: 100}: G8
    BB (TGA) {volume: 100}: H1
    BB (TGC) {volume: 100}: H2
    BB (TGG) {volume: 100}: H3
    BB (TGT) {volume: 100}: H4
    BB (TTA) {volume: 100}: H5
    BB (TTC) {volume: 100}: H6
    BB (TTG) {volume: 100}: H7
    BB (TTT) {volume: 100}: H8
  Reagents:
    A-Site Restriction Enzyme {volume: 200}: A1-H1
    X-Site Restriction Enzyme {volume: 200}: A2-H2
    Y-Site Restriction Enzyme {volume: 200}: A3-H3
    B-Site Restriction Enzyme {volume: 200}: A4-H4
    10X CutSmart Buffer {volume: 200}: A5-H5
    T4 DNA Ligase  {volume: 200}: A6-H6
    Supplement T4 DNA Ligase Buffer {volume: 200}: A8-H8
    DNA Phosphatase (CIP)  {volume: 200}: A9-H9
    Nuclease Free Water  {volume: 200}: A10-H10
    10X T4 Ligation Buffer  {volume: 200}: A7-H7
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
  blockTargetTemp: 4
  lidIsActive: true
  lidTargetTemp: 37
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: D7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A1, B5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: F8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: G1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B1, C2
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: B7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: E8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: B6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: D4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D2
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- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: E6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: D6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A4, C5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: C5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B4, H4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: E2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: C8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: G2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: C4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E4, G4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: G4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: H5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: F4, G5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: B2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: F5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: BB Library
  aspirate_wells: C3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: H5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 41
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A10
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A1, A2, A4, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 41
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A1, A2, A4, A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A1, A4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A2, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 49
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: X & Y Digestion , temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat inactivation, temperature: 70, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A1, A4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A2, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 50
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: A & B Digestion, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: multiAspirate
  changeTip: once
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: A1, A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: multiAspirate
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: A4, A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3, A6
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3, A6
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3, A6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 43
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 70, durationMinutes: 15}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3, A6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 0.9
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3, A6
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 48
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Dephosphorylation, temperature: 37, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 2}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A6
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 49
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: X & Y Digestion , temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat inactivation, temperature: 70, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A6
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 50
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: A & B Digestion, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: multiAspirate
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: A3, A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 43
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 70, durationMinutes: 15}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 0.9
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 48
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Dephosphorylation, temperature: 37, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 2}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7, C7, E7, G7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B7, D7, F7, H7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 49
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: X & Y Digestion , temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat inactivation, temperature: 70, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: A7, C7, E7, G7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B7, D7, F7, H7
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 50
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: A & B Digestion, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: A7, B7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: C7, D7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: E7, F7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: F8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: G7, H7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: H8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, D8, F8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, D8, F8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, D8, F8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 43
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 70, durationMinutes: 15}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, D8, F8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 0.9
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, D8, F8, H8
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 48
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Dephosphorylation, temperature: 37, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 2}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, F8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 49
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: X & Y Digestion , temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat inactivation, temperature: 70, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: B8, F8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: D8, H8
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 50
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: A & B Digestion, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: B8, D8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: F8, H8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: G9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9, G9
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9, G9
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9, G9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 43
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 70, durationMinutes: 15}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 0.9
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9, G9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9, G9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 48
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Dephosphorylation, temperature: 37, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 2}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: true
  lidTargetTempHold: 37
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: G9
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 49
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: X & Y Digestion , temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat inactivation, temperature: 70, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: C9
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: G9
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 50
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: A & B Digestion, temperature: 37, durationMinutes: 60}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 20}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 21
  path: single
  changeTip: always
  aspirate_labware: 359 Synthesis cycle
  aspirate_wells: C9, G9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A7
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A8
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A6
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 43
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Ligation, temperature: 16, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 70, durationMinutes: 15}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: false
  lidOpenHold: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 0.9
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A5
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A9
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  dispense_labware: 359 Synthesis cycle
  dispense_wells: E10
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 48
  profileTargetLidTemp: 37
  orderedProfileItems:
    - {type: profileStep, title: Dephosphorylation, temperature: 37, durationMinutes: 30}
    - {type: profileStep, title: Heat Inactivation, temperature: 80, durationMinutes: 2}
  blockIsActiveHold: true
  blockTargetTempHold: 4
  lidIsActiveHold: true
  lidTargetTempHold: 37
  lidOpenHold: false
labwareDefinitions:
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commands:
- thermocycler/openLid: {module: thermocyclerModuleV1}
- thermocycler/setTargetBlockTemperature: {module: thermocyclerModuleV1, temperature: 4}
- thermocycler/awaitBlockTemperature: {module: thermocyclerModuleV1, temperature: 4}
- thermocycler/setTargetLidTemperature: {module: thermocyclerModuleV1, temperature: 37}
- thermocycler/awaitLidTemperature: {module: thermocyclerModuleV1, temperature: 37}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
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